CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (file doesnot contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:DAPI
    Conversion method:Combine
    Image type:RGB
    Name the output image:DAPIGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:DAPIGray
    Name the output image:EnhanceSpeckles
    Select the operation:Enhance
    Feature size:8
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:EnhanceSpeckles
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):4,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.015,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:EnhanceSpeckles
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:Nuclei

MeasureObjectSizeShape:[module_num:9|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enabled:False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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_Nuclei,Image|Width_DAPI,Image|FileName_DAPI,Image|Threshold_OrigThreshold_Nuclei,Image|Threshold_SumOfEntropies_Nuclei,Image|Threshold_WeightedVariance_Nuclei,Image|Threshold_FinalThreshold_Nuclei,Nuclei|Location_Center_Y,Nuclei|Location_Center_X,Nuclei|Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:A1105ii_
    Overwrite existing files without warning?:Yes
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:EnhanceSpeckles
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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